CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:7
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "h0t0z0c1x0")
    Name to assign these images:EYA4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "h0t0z0c0x0")
    Name to assign these images:KCNIP4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "h0t0z0c3x0")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "h0t0z0c2x0")
    Name to assign these images:NeuN
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:NeuN
    Name the primary objects to be identified:NeuN_cell_segmentation
    Typical diameter of objects, in pixel units (Min,Max):10,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
MeasureImageIntensity:[module_num:6|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
    Select images to measure:KCNIP4
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:NeuN_cell_segmentation
    Calculate custom percentiles:No
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
ExportToSpreadsheet:[module_num:7|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|Intensity_MeanIntensity_KCNIP4_NeuN_cell_segmentation,NeuN_cell_segmentation|Number_Object_Number
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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