CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "h0t0z0c1x0")
    Name to assign these images:EYA4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "h0t0z0c0x0")
    Name to assign these images:KCNIP4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "h0t0z0c3x0")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "h0t0z0c2x0")
    Name to assign these images:NeuN
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:NeuN
    Name the primary objects to be identified:NeuN_cell_segmentation
    Typical diameter of objects, in pixel units (Min,Max):10,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:EYA4
    Name the primary objects to be identified:EYA4
    Typical diameter of objects, in pixel units (Min,Max):5,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
RelateObjects:[module_num:7|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
    Parent objects:NeuN_cell_segmentation
    Child objects:EYA4
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:EYA4_positive
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
FilterObjects:[module_num:8|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
    Select the objects to filter:NeuN_cell_segmentation
    Name the output objects:EYA4_positive_measurements
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:Yes
    Name the objects removed by the filter:EYA4_negatives
    Select the measurement to filter by:Children_EYA4_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
MeasureImageIntensity:[module_num:9|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
    Select images to measure:KCNIP4
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:EYA4_positive
    Calculate custom percentiles:No
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
MeasureImageIntensity:[module_num:10|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
    Select images to measure:KCNIP4
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:EYA4_negatives
    Calculate custom percentiles:No
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