CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:cFos_analysis
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    Set intensity range from:Image metadata
    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:cFos_analysis
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:1
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    Image name:NeuN
    Channel number:2
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    Image name:GFP
    Channel number:3
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    Image name:DAPI
    Channel number:4
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    Image name:cFos

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:NeuN
    Name the primary objects to be identified:NeuN_cell_segmentation
    Typical diameter of objects, in pixel units (Min,Max):10,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:GFP
    Name the primary objects to be identified:GFP
    Typical diameter of objects, in pixel units (Min,Max):10,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:cFos
    Name the primary objects to be identified:cfos
    Typical diameter of objects, in pixel units (Min,Max):5,50
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:0.5
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
RelateObjects:[module_num:9|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
    Parent objects:NeuN_cell_segmentation
    Child objects:cfos
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:cfos_NeuN
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
RelateObjects:[module_num:10|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
    Parent objects:GFP
    Child objects:cfos
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:cfos_gfp
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
ExportToSpreadsheet:[module_num:11|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Image|Count_NeuN_cell_segmentation,Image|Count_cfos,Image|Count_cfos_gfp,Image|Count_cfos_NeuN,Image|Count_GFP
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
